<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Foraging rig: two cameras, a lick sensor, 12 s trials.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="modules/CameraRecorder.bonsai">
        <FileName>left.avi</FileName>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>1</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="modules/CameraRecorder.bonsai">
        <FileName>right.avi</FileName>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Period" DisplayName="TrialInterval" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT5S</rx:DueTime>
          <rx:Period>PT12S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Trial</Name>
        <Workflow>
          <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>TrialEnd</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialEnd</Name>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>session.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="port:SerialStringRead">
        <port:PortName>COM3</port:PortName>
        <port:NewLine>\r\n</port:NewLine>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>licks.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>trials.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="12" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
